PsychoPy2experiment version="1.84.1"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = split
  Units = use prefs
  Screen = 1
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Routines
  Routine real
    RatingScaleComponent rating
      labels = ,
      pos = 0, -0.3
      high = 100
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 0
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      customize_everything:
        low=0,
        high=100,
        scale=None,
        size=1.5,
        showAccept=True,
        acceptPreText='Skala klicken!',
        skipKeys = None
    TextComponent thesentence
      wrapWidth = 0.9
      text [set every repeat] = $sentence
      pos = (0, +0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent option1
      color = green
      text [set every repeat] = $opt1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent option2
      color = green
      text [set every repeat] = $opt2
      pos = (+0.5, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine testquest
    TextComponent text_12
      pos = (0, +0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Begin Routine:
        the_idx = randint(0,len(questiones)-1)
        the_question = questiones[the_idx][0]
        if questiones[the_idx][1] != '#':
          the_pattern = questiones[the_idx][1]
        else:
          the_pattern = ' '

        text_12.setText(the_question)
        text_13.setText(the_pattern)
    TextComponent text_13
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_15
      color = yellow
      text = Beantworten Sie die Frage jeweils durch Drücken der Tasten 1 bis 9.
      pos = (0, -0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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  Routine end
    TextComponent text_19
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Das Experiment ist beendet.

        Vielen Dank für Ihre Teilnahme!
  Routine deutsch
    TextComponent text_6
      text = Sprechen Sie seit mindestens Ihrem dritten Lebensjahr Deutsch als eine Ihrer Hauptsprachen und sind Sie überwiegend in einem deutschsprachigen Land zur Schule gegangen? Dann drücken Sie bitte J für 'Ja', sonst drücken Sie bitte N für 'Nein'.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'j','n'
      startVal [time (s)] = 0.0
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  Routine testing
    RatingScaleComponent rating_3
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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      customize_everything:
        low=0,
        high=100,
        scale=None,
        size=1.5,
        showAccept=True,
        acceptPreText='Skala klicken!',
        skipKeys = None
    TextComponent testsentence
      text [set every repeat] = $sentence
      pos = (0, +0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent testoption1
      color = green
      text [set every repeat] = $opt1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent testoption2
      color = green
      text [set every repeat] = $opt2
      pos = (+0.5, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_11
      color = yellow
      pos = (+0.75, -0.65)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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      text:
        Bewerten Sie die beiden möglichen
        Lückenfüller relativ zueinander.

        Sie können auf die Skala klicken
        und beliebig oft ihre Bewertung
        revidieren. Klicken Sie auf den
        pulsierenden Schalter, um die
        Bewertung zu übernehmen und das
        Experiment fortzusetzen.
    TextComponent text_14
      color = yellow
      pos = (-0.75, -0.05)
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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      text:
        Die beiden möglichen Lückenfüller
        stehen hier in grüner Schrift an den
        entsprechenden Enden der Skala.
  Routine intro4
    TextComponent text_7
      text = Vielen Dank! Jetzt üben Sie bitte an fünf Sätzen den Ablauf des Experiments.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_8
      color = yellow
      text = Drücken Sie die Leertaste, um weiterzulesen.
      pos = (0, -0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine start
    TextComponent text_9
      text = Vielen Dank! Die Übungsphase ist beendet. Sie beginnen jetzt mit dem Experiment. Die Hinweise in gelber Schrift werden dabei nicht mehr angezeigt.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_10
      color = yellow
      text = Drücken Sie die Leertaste, um zu beginnen.
      pos = (0, -0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine init
    CodeComponent code
      Begin Experiment:
        from random import randint

        condFile = u'stimuli/'+expInfo['participant']+'.csv'

        questFile = u'questions.csv'

        with open(questFile) as f:
          questiones = [l.decode('utf-8').strip().strip('"').split('\t') for l in f]
  Routine realquest
    CodeComponent code_4
      Begin Routine:
        the_idx = randint(0,len(questiones)-1)
        the_question = questiones[the_idx][0]
        if questiones[the_idx][1] != '#':
          the_pattern = questiones[the_idx][1]
        else:
          the_pattern = ' '

        text_16.setText(the_question)
        text_17.setText(the_pattern)
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      startVal [time (s)] = 0.0
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    TextComponent text_16
      pos = (0, +0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_17
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine intro1
    TextComponent text
      text [set every repeat] = $introtext
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = yellow
      text = Drücken Sie die Leertaste, um weiterzulesen.
      pos = (0, -0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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  Routine intro2
    TextComponent text_3
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      letterHeight = 0.065
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      text:
        Wir bitten Sie, mit einem Schieber wie diesem und dem Mauszeiger anzugeben, wie gut der linke bzw. der rechte Lückenfüller ist. Die Bewertung erfolgt auf einer Skala von 0 (nur der linke Füller ist akzeptabel) über 50 (beide sind gleich akzeptabel) bis zu 100 (nur der rechte ist akzeptabel). Sie können Ihre Bewertung also sehr differenziert gestalten.

        Ihre Bewertung wird unter dem Schieber als Zahl angezeigt. Drücken Sie auf die Zahl, wenn Sie sich für eine endgültige Bewertung entschieden haben. Probieren Sie es bitte jetzt aus!
    RatingScaleComponent rating_2
      pos = 0, -0.6
      high = 100
      startVal [time (s)] = 0.0
      size = 0.75
      forceEndRoutine = True
      low = 0
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      customize_everything:
        low=0,
        high=100,
        scale=None,
        size=1.0,
        showAccept=True,
        acceptPreText='Skala klicken!',
        skipKeys = None
  Routine intro3
    TextComponent text_4
      text [set every repeat] = $introtext
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_5
      color = yellow
      text = Drücken Sie die Leertaste, um weiterzulesen.
      pos = (0, -0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine testinit
    CodeComponent code_2
Flow
  Routine init
  LoopInitiator introloop1 loopType="TrialHandler"
    conditionsFile = intro1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'introtext': u'Vielen Dank, dass Sie an diesem Experiment teilnehmen. Vor dem eigentlichen Experiment sehen Sie nun zuerst eine kurze Erl\xe4uterung, und Sie absolvieren ein kurze \xdcbungsphase.'},
      {u'introtext': u'Das Experiment dauert insgesamt nicht mehr als 30 Minuten.'},
      {u'introtext': u'In diesem Experiment wird Ihnen jeweils ein deutscher Satz mit einer L\xfccke in Form eines Unterstrichs ___________ pr\xe4sentiert.'},
      {u'introtext': u'Au\xdferdem werden Ihnen zwei m\xf6gliche F\xfcller (W\xf6rter oder kurze Wortgruppen) f\xfcr die L\xfccke im unteren Bildschirmbereich angeboten.'},
      {u'introtext': u'Wir bitten Sie, sich den Satz in Ruhe anzuschauen und zu \xfcberlegen, wie gut die beiden Optionen die L\xfccke f\xfcllen k\xf6nnten.'}]
    Routine intro1
  LoopTerminator introloop1
  Routine intro2
  LoopInitiator introloop2 loopType="TrialHandler"
    conditionsFile = intro2.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'introtext': u'Nach jedem Satz wird Ihnen eine Frage gestellt, die sich mit den Ziffern 1 bis 9 beantworten l\xe4sst. Dr\xfccken Sie dann die entsprechende Taste, um zu antworten. Die Fragen k\xf6nnen sich im Laufe des Experiments wiederholen.'},
      {u'introtext': u'Unterbrechen Sie das Experiment bitte auf keinen Fall, stellen Sie den Experimentator*innen nach dem Experimentbeginn keine Fragen, und lassen Sie sich nicht durch Umgebungsger\xe4usche ablenken.'},
      {u'introtext': u'Im n\xe4chsten Schritt beantworten Sie bitte eine Frage zu Ihren Deutschkenntnissen. Danach beginnt eine \xdcbungseinheit, mit der Sie sich an die Art der Durchf\xfchrung dieses Experiments gew\xf6hnen k\xf6nnen.'}]
    Routine intro3
  LoopTerminator introloop2
  Routine deutsch
  Routine intro4
  LoopInitiator testruns loopType="TrialHandler"
    conditionsFile = dryrun.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'opt2': u'hat', u'opt1': u'ist', u'sentence': u'Bei der Preisverleihung __________ der Redner abgeschweift.'},
      {u'opt2': u'ihren', u'opt1': u'seinen', u'sentence': u'Kim sieht n\xe4chste Woche __________ Bruder wieder.'},
      {u'opt2': u'liefe', u'opt1': u'laufe', u'sentence': u'Manche behaupten, die Umweltpolitik __________ in die falsche Richtung.'},
      {u'opt2': u'Sonnenlicht', u'opt1': u'Tageslicht', u'sentence': u'Bei __________ ist das Joggen im Volkspark sch\xf6ner.'},
      {u'opt2': u'geschlafen', u'opt1': u'geschlaft', u'sentence': u'Auch um vier Uhr hat Elena letzte Nach noch nicht __________ .'}]
    Routine testing
    Routine testquest
  LoopTerminator testruns
  Routine start
  LoopInitiator realruns loopType="TrialHandler"
    conditionsFile = $condFile
    loopType = sequential
    nReps = 1
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    Routine real
    Routine realquest
  LoopTerminator realruns
  Routine end
